<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:p1="clr-namespace:AllenNeuralDynamics.Core;assembly=AllenNeuralDynamics.Core"
                 xmlns:p2="clr-namespace:AllenNeuralDynamics.VersionControl;assembly=AllenNeuralDynamics.VersionControl"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:p3="clr-namespace:Harp.Olfactometer;assembly=Harp.Olfactometer"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="rx:Defer">
        <Name>HardwareValidation</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>Channel3AsCarrier</Name>
            </Expression>
            <Expression xsi:type="BitwiseNot" />
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:ThrowException">
                <p1:Message>Channel3 must be defined as a carrier!</p1:Message>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Repository</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p2:IsRepositoryClean">
                <p2:IgnoreUntracked>false</p2:IgnoreUntracked>
              </Combinator>
            </Expression>
            <Expression xsi:type="BitwiseNot" />
            <Expression xsi:type="SubscribeSubject">
              <Name>SessionSchema</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>AllowDirtyRepo</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Name>AllowDirty?</scr:Name>
              <scr:Expression>Item2 ? False : Item1</scr:Expression>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:ThrowException">
                <p1:Message>Repository is not clean! Please discard all local changes.</p1:Message>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Channel3AsCarrier</Name>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>SampleFlow</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>StartExperiment</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>OlfactometerHubEventsGroupedBy</Name>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionCondition">
                    <scr:Expression>it.Key == 0</scr:Expression>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2</Selector>
                  </Expression>
                  <Expression xsi:type="p3:Parse">
                    <harp:Register xsi:type="p3:TimestampedChannel3ActualFlow" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Value</Selector>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="LowFlowThreshold" />
                  </Expression>
                  <Expression xsi:type="LessThan">
                    <Operand xsi:type="FloatProperty">
                      <Value>950</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2</Selector>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="10" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="9" Label="Source1" />
                  <Edge From="8" To="9" Label="Source2" />
                  <Edge From="9" To="10" Label="Source2" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:ThrowException">
                <p1:Message>Flow on Channel3 is lower than expected.</p1:Message>
              </Combinator>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="9" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source2" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>