<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.5"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:p1="clr-namespace:Harp.AnalogInput;assembly=Harp.AnalogInput"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="rx:BehaviorSubject" TypeArguments="harp:HarpMessage">
        <rx:Name>HarpAnalogInputCommands</rx:Name>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="PortName" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:Device">
          <harp:OperationMode>Active</harp:OperationMode>
          <harp:OperationLed>On</harp:OperationLed>
          <harp:DumpRegisters>true</harp:DumpRegisters>
          <harp:VisualIndicators>On</harp:VisualIndicators>
          <harp:Heartbeat>Enabled</harp:Heartbeat>
          <harp:IgnoreErrors>false</harp:IgnoreErrors>
          <harp:PortName>COM8</harp:PortName>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>HarpAnalogInputEvents</Name>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Name" DisplayName="TriggerHarpReadDumpSubjectName" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>TriggerHarpReadDump</Name>
      </Expression>
      <Expression xsi:type="harp:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="harp:CreateOperationControlPayload">
          <harp:OperationMode>Active</harp:OperationMode>
          <harp:DumpRegisters>true</harp:DumpRegisters>
          <harp:MuteReplies>false</harp:MuteReplies>
          <harp:VisualIndicators>On</harp:VisualIndicators>
          <harp:OperationLed>On</harp:OperationLed>
          <harp:Heartbeat>Enabled</harp:Heartbeat>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>HarpAnalogInputCommands</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>HarpAnalogInputEvents</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="p1:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="p1:CreateSamplingRatePayload">
          <p1:SamplingRate>SamplingRate1000Hz</p1:SamplingRate>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>HarpAnalogInputCommands</Name>
      </Expression>
      <Expression xsi:type="p1:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="p1:CreateRangeAndFilterPayload">
          <p1:RangeAndFilter>Range10VLowPass3000Hz</p1:RangeAndFilter>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>HarpAnalogInputCommands</Name>
      </Expression>
      <Expression xsi:type="p1:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="p1:CreateAcquisitionStatePayload">
          <p1:AcquisitionState>Enabled</p1:AcquisitionState>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>HarpAnalogInputCommands</Name>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="2" Label="Source1" />
      <Edge From="1" To="2" Label="Source2" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>