<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:p1="clr-namespace:AllenNeuralDynamics.Core;assembly=AllenNeuralDynamics.Core"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:p2="clr-namespace:Harp.Olfactometer;assembly=Harp.Olfactometer"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:p3="clr-namespace:AllenNeuralDynamics.WhiteRabbit;assembly=AllenNeuralDynamics.WhiteRabbit"
                 xmlns:p4="clr-namespace:Harp.AnalogInput;assembly=Harp.AnalogInput"
                 xmlns:p5="clr-namespace:Harp.StepperDriver;assembly=Harp.StepperDriver"
                 xmlns:p6="clr-namespace:AllenNeuralDynamics.HarpUtils;assembly=AllenNeuralDynamics.HarpUtils"
                 xmlns:p7="clr-namespace:AllenNeuralDynamics.VersionControl;assembly=AllenNeuralDynamics.VersionControl"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:p8="clr-namespace:AindBehaviorDeviceOlfactometerDataSchema;assembly=Extensions"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="rx:Defer">
        <Name>Logging</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="rx:Defer">
              <Name>Behavior</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="Modality" />
                  </Expression>
                  <Expression xsi:type="PropertySource" TypeArguments="p1:AppendModalitySuffix,sys:Nullable(p1:Modality)">
                    <MemberName>Modality</MemberName>
                    <Value>Behavior</Value>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:AsyncSubject">
                    <Name>Modality</Name>
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>HarpLogging</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>OlfactometerHubEventsGroupedBy</Name>
                        </Expression>
                        <Expression xsi:type="rx:CreateObservable">
                          <Name>LogOlfactometerHub</Name>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Take">
                                  <rx:Count>1</rx:Count>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="rx:ReplaySubject">
                                <Name>thisOlfactometer</Name>
                                <rx:BufferSize xsi:nil="true" />
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>thisOlfactometer</Name>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Merge" />
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>Item2</Selector>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>Modality</Name>
                              </Expression>
                              <Expression xsi:type="PropertyMapping">
                                <PropertyMappings>
                                  <Property Name="Modality" />
                                </PropertyMappings>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="p2:GetDeviceMetadata" />
                              </Expression>
                              <Expression xsi:type="PropertyMapping">
                                <PropertyMappings>
                                  <Property Name="DeviceMetadata" />
                                </PropertyMappings>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>thisOlfactometer</Name>
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>Key</Selector>
                              </Expression>
                              <Expression xsi:type="scr:ExpressionTransform">
                                <scr:Expression>it &gt; 0 ? "OlfactometerExtension" + it.ToString() : "Olfactometer"</scr:Expression>
                              </Expression>
                              <Expression xsi:type="PropertyMapping">
                                <PropertyMappings>
                                  <Property Name="DeviceName" />
                                </PropertyMappings>
                              </Expression>
                              <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.HarpUtils:LogHarpDeviceWithMetadata.bonsai">
                                <DeviceMetadata />
                                <Modality>Behavior</Modality>
                                <DeviceName>Olfactometer</DeviceName>
                              </Expression>
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="1" To="2" Label="Source1" />
                              <Edge From="3" To="4" Label="Source1" />
                              <Edge From="4" To="5" Label="Source1" />
                              <Edge From="5" To="14" Label="Source1" />
                              <Edge From="6" To="7" Label="Source1" />
                              <Edge From="7" To="14" Label="Source2" />
                              <Edge From="8" To="9" Label="Source1" />
                              <Edge From="9" To="14" Label="Source3" />
                              <Edge From="10" To="11" Label="Source1" />
                              <Edge From="11" To="12" Label="Source1" />
                              <Edge From="12" To="13" Label="Source1" />
                              <Edge From="13" To="14" Label="Source4" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Merge" />
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>HarpWhiteRabbitEvents</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>Modality</Name>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="Modality" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="p3:GetMetadata" />
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="DeviceMetadata" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.HarpUtils:LogHarpDeviceWithMetadata.bonsai">
                          <DeviceMetadata />
                          <Modality>Behavior</Modality>
                          <DeviceName>WhiteRabbit</DeviceName>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>HarpAnalogInputEvents</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>Modality</Name>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="Modality" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="p4:GetMetadata" />
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="DeviceMetadata" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.HarpUtils:LogHarpDeviceWithMetadata.bonsai">
                          <DeviceMetadata />
                          <Modality>Behavior</Modality>
                          <DeviceName>AnalogInput</DeviceName>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>StepperDriverEvents</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>Modality</Name>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="Modality" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="p5:GetDeviceMetadata" />
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="DeviceMetadata" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.HarpUtils:LogHarpDeviceWithMetadata.bonsai">
                          <DeviceMetadata />
                          <Modality>Behavior</Modality>
                          <DeviceName>StepperDriver</DeviceName>
                        </Expression>
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="3" To="8" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="5" To="8" Label="Source2" />
                        <Edge From="6" To="7" Label="Source1" />
                        <Edge From="7" To="8" Label="Source3" />
                        <Edge From="9" To="14" Label="Source1" />
                        <Edge From="10" To="11" Label="Source1" />
                        <Edge From="11" To="14" Label="Source2" />
                        <Edge From="12" To="13" Label="Source1" />
                        <Edge From="13" To="14" Label="Source3" />
                        <Edge From="15" To="20" Label="Source1" />
                        <Edge From="16" To="17" Label="Source1" />
                        <Edge From="17" To="20" Label="Source2" />
                        <Edge From="18" To="19" Label="Source1" />
                        <Edge From="19" To="20" Label="Source3" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>HarpCommandsLogging</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>HarpTimestampSource</Name>
                        </Expression>
                        <Expression xsi:type="rx:BehaviorSubject">
                          <Name>HarpSeconds</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>OlfactometerHubCommandsGroupedBy</Name>
                        </Expression>
                        <Expression xsi:type="rx:CreateObservable">
                          <Name>LogOlfactometerHub</Name>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Take">
                                  <rx:Count>1</rx:Count>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="rx:ReplaySubject">
                                <Name>thisOlfactometer</Name>
                                <rx:BufferSize xsi:nil="true" />
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>thisOlfactometer</Name>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Merge" />
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>Item2</Selector>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>HarpTimestampSource</Name>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:WithLatestFrom" />
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="p6:ModifyMessage">
                                  <p6:Address xsi:nil="true" />
                                  <p6:MessageTypeModified xsi:nil="true" />
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>Modality</Name>
                              </Expression>
                              <Expression xsi:type="PropertyMapping">
                                <PropertyMappings>
                                  <Property Name="Modality" />
                                </PropertyMappings>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="p2:GetDeviceMetadata" />
                              </Expression>
                              <Expression xsi:type="PropertyMapping">
                                <PropertyMappings>
                                  <Property Name="DeviceMetadata" />
                                </PropertyMappings>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>thisOlfactometer</Name>
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>Key</Selector>
                              </Expression>
                              <Expression xsi:type="scr:ExpressionTransform">
                                <scr:Expression>it &gt; 0 ? "OlfactometerExtension" + it.ToString() : "Olfactometer"</scr:Expression>
                              </Expression>
                              <Expression xsi:type="Format">
                                <Format>HarpCommands/{0}</Format>
                                <Selector>it</Selector>
                              </Expression>
                              <Expression xsi:type="PropertyMapping">
                                <PropertyMappings>
                                  <Property Name="DeviceName" />
                                </PropertyMappings>
                              </Expression>
                              <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.HarpUtils:LogHarpDeviceWithMetadata.bonsai">
                                <DeviceMetadata />
                                <Modality>Behavior</Modality>
                                <DeviceName>Olfactometer</DeviceName>
                              </Expression>
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="1" To="2" Label="Source1" />
                              <Edge From="3" To="4" Label="Source1" />
                              <Edge From="4" To="5" Label="Source1" />
                              <Edge From="5" To="7" Label="Source1" />
                              <Edge From="6" To="7" Label="Source2" />
                              <Edge From="7" To="8" Label="Source1" />
                              <Edge From="8" To="18" Label="Source1" />
                              <Edge From="9" To="10" Label="Source1" />
                              <Edge From="10" To="18" Label="Source2" />
                              <Edge From="11" To="12" Label="Source1" />
                              <Edge From="12" To="18" Label="Source3" />
                              <Edge From="13" To="14" Label="Source1" />
                              <Edge From="14" To="15" Label="Source1" />
                              <Edge From="15" To="16" Label="Source1" />
                              <Edge From="16" To="17" Label="Source1" />
                              <Edge From="17" To="18" Label="Source4" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Merge" />
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>HarpAnalogInputCommands</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>HarpSeconds</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:WithLatestFrom" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="p6:ModifyMessage">
                            <p6:Address xsi:nil="true" />
                            <p6:MessageTypeModified xsi:nil="true" />
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>Modality</Name>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="Modality" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="p4:GetMetadata" />
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="DeviceMetadata" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.HarpUtils:LogHarpDeviceWithMetadata.bonsai">
                          <DeviceMetadata />
                          <Modality>Behavior</Modality>
                          <DeviceName>HarpCommands/AnalogInput</DeviceName>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>HarpWhiteRabbitCommands</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>HarpSeconds</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:WithLatestFrom" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="p6:ModifyMessage">
                            <p6:Address xsi:nil="true" />
                            <p6:MessageTypeModified xsi:nil="true" />
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>Modality</Name>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="Modality" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="p3:GetMetadata" />
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="DeviceMetadata" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.HarpUtils:LogHarpDeviceWithMetadata.bonsai">
                          <DeviceMetadata />
                          <Modality>Behavior</Modality>
                          <DeviceName>HarpCommands/WhiteRabbit</DeviceName>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>StepperDriverEvents</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>HarpSeconds</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:WithLatestFrom" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="p6:ModifyMessage">
                            <p6:Address xsi:nil="true" />
                            <p6:MessageTypeModified xsi:nil="true" />
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>Modality</Name>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="Modality" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="p5:GetDeviceMetadata" />
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="DeviceMetadata" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.HarpUtils:LogHarpDeviceWithMetadata.bonsai">
                          <DeviceMetadata />
                          <Modality>Behavior</Modality>
                          <DeviceName>HarpCommands/StepperDriver</DeviceName>
                        </Expression>
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="5" To="7" Label="Source1" />
                        <Edge From="6" To="7" Label="Source2" />
                        <Edge From="7" To="8" Label="Source1" />
                        <Edge From="8" To="13" Label="Source1" />
                        <Edge From="9" To="10" Label="Source1" />
                        <Edge From="10" To="13" Label="Source2" />
                        <Edge From="11" To="12" Label="Source1" />
                        <Edge From="12" To="13" Label="Source3" />
                        <Edge From="14" To="16" Label="Source1" />
                        <Edge From="15" To="16" Label="Source2" />
                        <Edge From="16" To="17" Label="Source1" />
                        <Edge From="17" To="22" Label="Source1" />
                        <Edge From="18" To="19" Label="Source1" />
                        <Edge From="19" To="22" Label="Source2" />
                        <Edge From="20" To="21" Label="Source1" />
                        <Edge From="21" To="22" Label="Source3" />
                        <Edge From="23" To="25" Label="Source1" />
                        <Edge From="24" To="25" Label="Source2" />
                        <Edge From="25" To="26" Label="Source1" />
                        <Edge From="26" To="31" Label="Source1" />
                        <Edge From="27" To="28" Label="Source1" />
                        <Edge From="28" To="31" Label="Source2" />
                        <Edge From="29" To="30" Label="Source1" />
                        <Edge From="30" To="31" Label="Source3" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>SoftwareEvents</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="GroupWorkflow">
                          <Name>Metadata</Name>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>Repository</Name>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="p7:IsRepositoryClean">
                                  <p7:IgnoreUntracked>false</p7:IgnoreUntracked>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="p1:CreateSoftwareEvent">
                                  <p1:EventName>RepositoryStatus</p1:EventName>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>EndExperiment</Name>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="StringProperty">
                                  <Value>ExperimentCompleted</Value>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="p1:CreateSoftwareEvent">
                                  <p1:EventName>EndSession</p1:EventName>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Merge" />
                              </Expression>
                              <Expression xsi:type="MulticastSubject">
                                <Name>SoftwareEvent</Name>
                              </Expression>
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="1" To="2" Label="Source1" />
                              <Edge From="2" To="6" Label="Source1" />
                              <Edge From="3" To="4" Label="Source1" />
                              <Edge From="4" To="5" Label="Source1" />
                              <Edge From="5" To="6" Label="Source2" />
                              <Edge From="6" To="7" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:DelaySubscription">
                            <rx:DueTime>PT1S</rx:DueTime>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>SoftwareEvent</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>HarpTimestampSource</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:WithLatestFrom" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="harp:CreateTimestamped" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="p1:TimestampSoftwareEvent" />
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>Modality</Name>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="Modality" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.Core:LogSoftwareEventsDemux.bonsai">
                          <LoggerName>SoftwareEvents</LoggerName>
                          <SubjectName>LoggingRootPath</SubjectName>
                          <Modality xsi:nil="true" />
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="2" To="4" Label="Source1" />
                        <Edge From="3" To="4" Label="Source2" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="5" To="6" Label="Source1" />
                        <Edge From="6" To="9" Label="Source1" />
                        <Edge From="7" To="8" Label="Source1" />
                        <Edge From="8" To="9" Label="Source2" />
                        <Edge From="9" To="10" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="rx:Defer">
                    <Name>Logs</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="StringProperty">
                            <Value>Logs</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="rx:AsyncSubject">
                          <Name>DeviceName</Name>
                        </Expression>
                        <Expression xsi:type="GroupWorkflow">
                          <Name>ConfigSchemaLogging</Name>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>SessionSchema</Name>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="p8:SerializeToJson">
                                  <p8:Formatting>None</p8:Formatting>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>Modality</Name>
                              </Expression>
                              <Expression xsi:type="PropertyMapping">
                                <PropertyMappings>
                                  <Property Name="Modality" />
                                </PropertyMappings>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>DeviceName</Name>
                              </Expression>
                              <Expression xsi:type="PropertyMapping">
                                <PropertyMappings>
                                  <Property Name="DeviceName" />
                                </PropertyMappings>
                              </Expression>
                              <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.Core:LogDataSchema.bonsai">
                                <SubjectName>LoggingRootPath</SubjectName>
                                <Modality xsi:nil="true" />
                                <DeviceName>Config</DeviceName>
                                <LogName>session_output</LogName>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>TaskLogicSchema</Name>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="p8:SerializeToJson">
                                  <p8:Formatting>None</p8:Formatting>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>Modality</Name>
                              </Expression>
                              <Expression xsi:type="PropertyMapping">
                                <PropertyMappings>
                                  <Property Name="Modality" />
                                </PropertyMappings>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>DeviceName</Name>
                              </Expression>
                              <Expression xsi:type="PropertyMapping">
                                <PropertyMappings>
                                  <Property Name="DeviceName" />
                                </PropertyMappings>
                              </Expression>
                              <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.Core:LogDataSchema.bonsai">
                                <SubjectName>LoggingRootPath</SubjectName>
                                <Modality xsi:nil="true" />
                                <DeviceName>Config</DeviceName>
                                <LogName>tasklogic_output</LogName>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>RigSchema</Name>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="p8:SerializeToJson">
                                  <p8:Formatting>None</p8:Formatting>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>Modality</Name>
                              </Expression>
                              <Expression xsi:type="PropertyMapping">
                                <PropertyMappings>
                                  <Property Name="Modality" />
                                </PropertyMappings>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>DeviceName</Name>
                              </Expression>
                              <Expression xsi:type="PropertyMapping">
                                <PropertyMappings>
                                  <Property Name="DeviceName" />
                                </PropertyMappings>
                              </Expression>
                              <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.Core:LogDataSchema.bonsai">
                                <SubjectName>LoggingRootPath</SubjectName>
                                <Modality xsi:nil="true" />
                                <DeviceName>Config</DeviceName>
                                <LogName>rig_output</LogName>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>RawRigSchema</Name>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>Modality</Name>
                              </Expression>
                              <Expression xsi:type="PropertyMapping">
                                <PropertyMappings>
                                  <Property Name="Modality" />
                                </PropertyMappings>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>DeviceName</Name>
                              </Expression>
                              <Expression xsi:type="PropertyMapping">
                                <PropertyMappings>
                                  <Property Name="DeviceName" />
                                </PropertyMappings>
                              </Expression>
                              <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.Core:LogAllText.bonsai">
                                <SubjectName>LoggingRootPath</SubjectName>
                                <Modality xsi:nil="true" />
                                <DeviceName>Config</DeviceName>
                                <LogName>rig_input</LogName>
                                <Extension>json</Extension>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>RawSessionSchema</Name>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>Modality</Name>
                              </Expression>
                              <Expression xsi:type="PropertyMapping">
                                <PropertyMappings>
                                  <Property Name="Modality" />
                                </PropertyMappings>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>DeviceName</Name>
                              </Expression>
                              <Expression xsi:type="PropertyMapping">
                                <PropertyMappings>
                                  <Property Name="DeviceName" />
                                </PropertyMappings>
                              </Expression>
                              <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.Core:LogAllText.bonsai">
                                <SubjectName>LoggingRootPath</SubjectName>
                                <Modality xsi:nil="true" />
                                <DeviceName>Config</DeviceName>
                                <LogName>session_input</LogName>
                                <Extension>json</Extension>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>RawTaskLogicSchema</Name>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>Modality</Name>
                              </Expression>
                              <Expression xsi:type="PropertyMapping">
                                <PropertyMappings>
                                  <Property Name="Modality" />
                                </PropertyMappings>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>DeviceName</Name>
                              </Expression>
                              <Expression xsi:type="PropertyMapping">
                                <PropertyMappings>
                                  <Property Name="DeviceName" />
                                </PropertyMappings>
                              </Expression>
                              <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.Core:LogAllText.bonsai">
                                <SubjectName>LoggingRootPath</SubjectName>
                                <Modality xsi:nil="true" />
                                <DeviceName>Config</DeviceName>
                                <LogName>tasklogic_input</LogName>
                                <Extension>json</Extension>
                              </Expression>
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="1" To="6" Label="Source1" />
                              <Edge From="2" To="3" Label="Source1" />
                              <Edge From="3" To="6" Label="Source2" />
                              <Edge From="4" To="5" Label="Source1" />
                              <Edge From="5" To="6" Label="Source3" />
                              <Edge From="7" To="8" Label="Source1" />
                              <Edge From="8" To="13" Label="Source1" />
                              <Edge From="9" To="10" Label="Source1" />
                              <Edge From="10" To="13" Label="Source2" />
                              <Edge From="11" To="12" Label="Source1" />
                              <Edge From="12" To="13" Label="Source3" />
                              <Edge From="14" To="15" Label="Source1" />
                              <Edge From="15" To="20" Label="Source1" />
                              <Edge From="16" To="17" Label="Source1" />
                              <Edge From="17" To="20" Label="Source2" />
                              <Edge From="18" To="19" Label="Source1" />
                              <Edge From="19" To="20" Label="Source3" />
                              <Edge From="21" To="26" Label="Source1" />
                              <Edge From="22" To="23" Label="Source1" />
                              <Edge From="23" To="26" Label="Source2" />
                              <Edge From="24" To="25" Label="Source1" />
                              <Edge From="25" To="26" Label="Source3" />
                              <Edge From="27" To="32" Label="Source1" />
                              <Edge From="28" To="29" Label="Source1" />
                              <Edge From="29" To="32" Label="Source2" />
                              <Edge From="30" To="31" Label="Source1" />
                              <Edge From="31" To="32" Label="Source3" />
                              <Edge From="33" To="38" Label="Source1" />
                              <Edge From="34" To="35" Label="Source1" />
                              <Edge From="35" To="38" Label="Source2" />
                              <Edge From="36" To="37" Label="Source1" />
                              <Edge From="37" To="38" Label="Source3" />
                            </Edges>
                          </Workflow>
                        </Expression>
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>AlicatFlowmeterEvents</Name>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.Core:LogCsv.bonsai">
                    <SubjectName>LoggingRootPath</SubjectName>
                    <Modality>Behavior</Modality>
                    <LogName>AlicatFlowmeter</LogName>
                    <DeviceName>OperationControl</DeviceName>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>RigSchema</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Flowmeter</Selector>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.Core:FilterNotNull.bonsai" />
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:SubscribeWhen" />
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="13" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="13" Label="Source2" />
                </Edges>
              </Workflow>
            </Expression>
          </Nodes>
          <Edges />
        </Workflow>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>