<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:p1="clr-namespace:Harp.Olfactometer;assembly=Harp.Olfactometer"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:p2="clr-namespace:;assembly=Extensions"
                 xmlns:scg="clr-namespace:System.Collections.Generic;assembly=mscorlib"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="GroupWorkflow">
        <Name>EndValveControl</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>OlfactometerHubEvents</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RigSchema</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>HarpOlfactometerExtension</Selector>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Count</Selector>
            </Expression>
            <Expression xsi:type="Add">
              <Operand xsi:type="IntProperty">
                <Value>1</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Count" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>OdorEndValveState</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>OdorEndValveState</Name>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Name>OdorPath</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="PropertySource" TypeArguments="p1:CreateEndValvesStatePayload,p1:EndValves">
              <MemberName>EndValvesState</MemberName>
              <Value>EndValve0</Value>
            </Expression>
            <Expression xsi:type="BitwiseNot" />
            <Expression xsi:type="rx:Condition">
              <Name>CarrierPath</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="PropertySource" TypeArguments="p1:CreateEndValvesStatePayload,p1:EndValves">
              <MemberName>EndValvesState</MemberName>
              <Value>None</Value>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="p1:Format">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Register xsi:type="p1:EndValveState" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>OlfactometerHubCommands</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="6" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source2" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="9" To="12" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="15" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source2" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="16" To="18" Label="Source2" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="18" To="19" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>InitialState</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>OlfactometerHubEvents</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RigSchema</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>HarpOlfactometerExtension</Selector>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Count</Selector>
            </Expression>
            <Expression xsi:type="Add">
              <Operand xsi:type="IntProperty">
                <Value>1</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Count" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>olfactometesCount</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Count" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Range">
                <rx:Start>0</rx:Start>
                <rx:Count>0</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="DoubleProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:ToArray" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>olfactometesCount</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="OlfactometerChannelCount" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>TaskLogicParameters</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>FullFlowRate</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="TotalFlow" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p2:CreateHubOdorMixture">
                <p2:PerOdorFlow>100</p2:PerOdorFlow>
                <p2:TotalFlow>1000</p2:TotalFlow>
                <p2:OlfactometerChannelCount>3</p2:OlfactometerChannelCount>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>SetOdorMix</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="6" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source2" />
            <Edge From="6" To="12" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source2" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="19" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="19" Label="Source2" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="18" To="19" Label="Source3" />
            <Edge From="19" To="20" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>RigSchema</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>HarpOlfactometerExtension</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Count</Selector>
      </Expression>
      <Expression xsi:type="Add">
        <Operand xsi:type="IntProperty">
          <Value>1</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="rx:AsyncSubject">
        <Name>olfactometesCount</Name>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject" TypeArguments="scg:IList(p2:OdorMixMessages)">
        <rx:Name>SetOdorMix</rx:Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="rx:CreateObservable">
        <Name>BroadcastToOlfactometerHub</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>thisBundle</Name>
            </Expression>
            <Expression xsi:type="rx:Defer">
              <Name>SetChannelsTargetFlow</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>thisBundle</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>OlfactometerIndex,ChannelsTargetFlow</Selector>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>OlfactometerHubCommands</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>OlfactometerHubEventsGroupedBy</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>thisBundle</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>OlfactometerIndex</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="scr:ExpressionCondition">
                    <scr:Expression>it.Item1.Key == it.Item2</scr:Expression>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item1</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="harp:FilterMessageType">
                      <harp:FilterType>Include</harp:FilterType>
                      <harp:MessageType>Write</harp:MessageType>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>thisBundle</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>ChannelsTargetFlow</Selector>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Address</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Address" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="harp:FilterRegister">
                    <harp:FilterType>Include</harp:FilterType>
                    <harp:Register xsi:type="harp:FilterRegisterAddress">
                      <harp:Address xsi:nil="true" />
                    </harp:Register>
                  </Expression>
                  <Expression xsi:type="Unit" />
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:Timer">
                      <gl:DueTime>PT0.01S</gl:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Unit" />
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>thisBundle</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2</Selector>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="3" To="6" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source2" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="16" Label="Source1" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="13" To="14" Label="Source1" />
                  <Edge From="14" To="15" Label="Source1" />
                  <Edge From="15" To="16" Label="Source2" />
                  <Edge From="16" To="17" Label="Source1" />
                  <Edge From="17" To="20" Label="Source1" />
                  <Edge From="18" To="19" Label="Source1" />
                  <Edge From="19" To="20" Label="Source2" />
                  <Edge From="20" To="21" Label="Source1" />
                  <Edge From="21" To="23" Label="Source1" />
                  <Edge From="22" To="23" Label="Source2" />
                  <Edge From="23" To="24" Label="Source1" />
                  <Edge From="24" To="25" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>SetOdorValveState</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>thisBundle</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>OlfactometerIndex,OdorValveState</Selector>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>OlfactometerHubCommands</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>OlfactometerHubEventsGroupedBy</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>thisBundle</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>OlfactometerIndex</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="scr:ExpressionCondition">
                    <scr:Expression>it.Item1.Key == it.Item2</scr:Expression>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item1</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="harp:FilterMessageType">
                      <harp:FilterType>Include</harp:FilterType>
                      <harp:MessageType>Write</harp:MessageType>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>thisBundle</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>OdorValveState</Selector>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Address</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Address" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="harp:FilterRegister">
                    <harp:FilterType>Include</harp:FilterType>
                    <harp:Register xsi:type="harp:FilterRegisterAddress">
                      <harp:Address xsi:nil="true" />
                    </harp:Register>
                  </Expression>
                  <Expression xsi:type="Unit" />
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:Timer">
                      <gl:DueTime>PT0.01S</gl:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Unit" />
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="3" To="6" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source2" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="16" Label="Source1" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="13" To="14" Label="Source1" />
                  <Edge From="14" To="15" Label="Source1" />
                  <Edge From="15" To="16" Label="Source2" />
                  <Edge From="16" To="17" Label="Source1" />
                  <Edge From="17" To="20" Label="Source1" />
                  <Edge From="18" To="19" Label="Source1" />
                  <Edge From="19" To="20" Label="Source2" />
                  <Edge From="20" To="21" Label="Source1" />
                  <Edge From="21" To="22" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>